PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MemoryGA
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        Welcome to our experiment.
        This experiment focuses on memory recognition and attention capablity of an individual.
        Further details will be provided by the researcher.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine blank500
    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.005
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  Routine WORD2
    TextComponent TWO
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = WATER               RALLY               TALLY
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  Routine WORD3
    TextComponent THREE
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = LOVE              CURVE              DOVE 
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  Routine WORD4
    TextComponent FOUR
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = NIGHT               RIGHT               WRITE
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  Routine WORD1
    TextComponent ONE
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = JOY               TOY               BOY
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  Routine WORD5
    TextComponent FIVE
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = HATE               MATE               FATE
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  Routine WORD6
    TextComponent SIX
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = COFFEE               RING               NAIL
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  Routine WORD7
    TextComponent SEVEN
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = EMPATHY              BRICK               BOTTLE
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  Routine WORD8
    TextComponent EIGHT
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = LAUGH           HALF          GIRAFFE
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  Routine WaitScreen
    TextComponent TEXTWAIT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        To proceed, get the further instructions from the researcher.
        There is no time limit, you can take your time and decide what key is to be pressed.
    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrials
    TextComponent textTrials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $word_item
    KeyboardComponent keytest
      allowedKeys = 'left','right'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EndScreen
    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating in the research. 
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  Routine WORD9
    TextComponent NINE
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = LONELY            COLD             HOMELY
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  Routine WORD10
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = FEAR               CHAIR               BEAR
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  Routine WORD11
    TextComponent Eleven
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = HOPE               CROWN               SOAP
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  Routine WORD12
    TextComponent twelve
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = CALM               HARM               PALM
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Flow
  Routine WelcomeScreen
  LoopInitiator trialsStudy loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine WORD1
    Routine blank500
    Routine WORD2
    Routine blank500
    Routine WORD3
    Routine blank500
    Routine WORD4
    Routine blank500
    Routine WORD5
    Routine blank500
    Routine WORD6
    Routine blank500
    Routine WORD7
    Routine blank500
    Routine WORD8
    Routine blank500
    Routine WORD9
    Routine blank500
    Routine WORD10
    Routine blank500
    Routine WORD11
    Routine blank500
    Routine WORD12
    Routine blank500
  LoopTerminator trialsStudy
  Routine WaitScreen
  Routine blank500
  LoopInitiator trialsTrials loopType="TrialHandler"
    conditionsFile = memoryGA.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word_item': 'WELL', 'correct_resp': 'left'},
      {'word_item': 'HATE', 'correct_resp': 'right'},
      {'word_item': 'TEA', 'correct_resp': 'left'},
      {'word_item': 'HALF', 'correct_resp': 'right'},
      {'word_item': 'BELLY', 'correct_resp': 'left'},
      {'word_item': 'LUV', 'correct_resp': 'left'},
      {'word_item': 'EMPATHY', 'correct_resp': 'right'},
      {'word_item': 'ANXIETY', 'correct_resp': 'left'},
      {'word_item': 'BOY', 'correct_resp': 'right'},
      {'word_item': 'FATE', 'correct_resp': 'right'},
      {'word_item': 'TOY', 'correct_resp': 'right'},
      {'word_item': 'GIRAFFE', 'correct_resp': 'right'},
      {'word_item': 'NIGHT', 'correct_resp': 'left'},
      {'word_item': 'VALLEY', 'correct_resp': 'left'},
      {'word_item': 'TURN', 'correct_resp': 'left'},
      {'word_item': 'FUN', 'correct_resp': 'left'},
      {'word_item': 'CAFFEINE', 'correct_resp': 'left'},
      {'word_item': 'WRITE', 'correct_resp': 'right'},
      {'word_item': 'RING', 'correct_resp': 'right'},
      {'word_item': 'OLD', 'correct_resp': 'left'},
      {'word_item': 'BEER', 'correct_resp': 'left'},
      {'word_item': 'SCOPE', 'correct_resp': 'left'},
      {'word_item': 'HOPE', 'correct_resp': 'right'},
      {'word_item': 'PLUM', 'correct_resp': 'left'}]
    Routine TestTrials
    Routine blank500
  LoopTerminator trialsTrials
  Routine EndScreen
